---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1366
set uniform_coordinates yes
set title "PyGaze Tobii Test"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 22
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\Epsi\\Desktop\\TobiiTest"
set disable_garbage_collection yes
set description "A template for eye-tracking experiments"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi no
set background "#808080"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 10
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim1 stim_a1
	setcycle 0 stim2 stim_b1
	setcycle 1 stim1 stim_a2
	setcycle 1 stim2 stim_b2
	setcycle 2 stim1 stim_a3
	setcycle 2 stim2 stim_b3
	setcycle 3 stim1 stim_a4
	setcycle 3 stim2 stim_b4
	setcycle 4 stim1 stim_a5
	setcycle 4 stim2 stim_b5
	setcycle 5 stim1 stim_a6
	setcycle 5 stim2 stim_b6
	setcycle 6 stim1 stim_a7
	setcycle 6 stim2 stim_b7
	setcycle 7 stim1 stim_a8
	setcycle 7 stim2 stim_b8
	setcycle 8 stim1 stim_a9
	setcycle 8 stim2 stim_b9
	setcycle 9 stim1 stim_a10
	setcycle 9 stim2 stim_b10
	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_loop always

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run pygaze_init always
	run instructions always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define sketchpad fixation
	set start_response_interval no
	set duration 745
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define pygaze_init pygaze_init
	set tracker_type Tobii
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep no
	set _logfile automatic

define pygaze_log pygaze_log__stim_off
	set throttle 0
	set msg "stop_stimuli [stim1]__vs__[stim2]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_log pygaze_log__stim_on
	set throttle 0
	set msg "start_stimuli [stim1]__vs__[stim2]"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define sketchpad sketchpad
	set duration 2995
	set description "Displays stimuli"
	draw image center=1 file="[stim1].jpg" scale=1 show_if=always x=-370 y=0 z_index=0
	draw image center=1 file="[stim2].jpg" scale=1 show_if=always x=370 y=0 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run pygaze_start_recording always
	run fixation always
	run pygaze_log__stim_on always
	run sketchpad always
	run pygaze_log__stim_off always
	run pygaze_stop_recording always
	run logger always

